CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "Probabilities_positives.tif")
    Name to assign these images:positives
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Probabilities_nuclei.tif")
    Name to assign these images:nuclei
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:nuclei
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:6|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
    Select the input image:positives
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRedPos
    Convert green to gray?:Yes
    Name the output image:OrigGreenPos
    Convert blue to gray?:Yes
    Name the output image:OrigBluePos
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
ImageMath:[module_num:7|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathNuclei
    Image or measurement?:Image
    Select the first image:OrigBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OrigGreen
    Multiply the second image by:1.0
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
ImageMath:[module_num:8|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathNucleiInverted
    Image or measurement?:Image
    Select the first image:ImageAfterMathNuclei
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:9|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathPos
    Image or measurement?:Image
    Select the first image:OrigGreenPos
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OrigBluePos
    Multiply the second image by:1.0
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
ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathPosInverted
    Image or measurement?:Image
    Select the first image:ImageAfterMathPos
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:11|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMathArea
    Image or measurement?:Image
    Select the first image:OrigRed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OrigGreen
    Multiply the second image by:1.0
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
ApplyThreshold:[module_num:12|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
    Select the input image:ImageAfterMathArea
    Name the output image:ThreshArea
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:ImageAfterMathNucleiInverted
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,27
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:NucleiOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:3.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:ImageAfterMathPosInverted
    Name the primary objects to be identified:Potivies
    Typical diameter of objects, in pixel units (Min,Max):7,27
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Name the outline image:Nuclei_PositiveOutlines
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:3.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
MeasureImageAreaOccupied:[module_num:15|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshArea

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|Desktop
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
    Select the image to use as the identifier:ImageAfterMathPosInverted
    Select the metadata to use as the identifier:FileName_positives
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:result_
    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:17|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|Desktop
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
    Select the image to use as the identifier:ImageAfterMathNucleiInverted
    Select the metadata to use as the identifier:FileName_nuclei
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:nuclei_
    Overwrite existing files without warning?:Yes
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|Desktop
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Metadata
    Select the image to use as the identifier:ImageAfterMathArea
    Select the metadata to use as the identifier:AreaOccupied_AreaOccupied_ThreshArea
    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:result_
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:19|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enabled:False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
    Select the type of image to save:Objects
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    Select the objects to save:Nuclei_Positive
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:positiveNuclei
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:nuclei
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
DisplayDataOnImage:[module_num:21|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:originial
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:22|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:originial
    Name the output image:OrigNucleiOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:#00FF13
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

SaveImages:[module_num:23|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OrigNucleiOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:originial
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Desktop
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Select colormap:flag
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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